PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pvt
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Routine:
        if false_start:
            continueRoutine = False
      Each Frame:
        movie.draw()
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = red
      lineColor = red
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instructions go here...

        Press SPACE
    KeyboardComponent ready_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine start_movie
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = drive.webm
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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  Routine random_delay
    VariableComponent random_delay_period
      saveStartStop = False
      startRoutineValue = random()*2.0 + 1.0
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    CodeComponent random_delay_code
      Code Type = Py
      Each Frame:
        movie.draw()
    KeyboardComponent false_start_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random_delay_period
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  Routine check_false_start
    CodeComponent false_start_code
      Code Type = Py
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      Begin Routine:
        false_start = false_start_keyboard.keys is not None
        thisExp.addData('false_start', false_start)

        if not false_start:
            continueRoutine = False
      Each Frame:
        movie.draw()
    TextComponent false_start_feedback
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = FALSE START
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Flow
  Routine instructions
  Routine start_movie
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine random_delay
    Routine check_false_start
    Routine trial
  LoopTerminator trials
